CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>[0-9]{2})c(?P<Col>[0-9]{2})f(?P<Rep>[0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "-ch1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "-ch2")
    Name to assign these images:Cherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "-ch3")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Cherry
    Name the primary objects to be identified:TransfectionEff
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.007,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:GFP
    Name the primary objects to be identified:TriGFP
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExportToDatabase:[module_num:8|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:Cherry,DAPI,GFP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:96
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    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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